#  Example Qudi configuration file.
#
#
#
# IMPORTANT: The format of every 'module.Class' line has changed on 28.6.2015.
# =========  The class name now needs to be explicitly given here in the config.
#		  the config line must the form package.module.Class.ClassName
global:
    # list of modules to load when starting
    startup: ['man', 'tray']

    module_server:
        address: 'localhost'
        port: 12345

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

hardware:
    nidaq_6259:
        module.Class: 'daq.national_instruments_m_series_MCL.NIDAQMSeries'
        piezo_read: 'Dev1/AI0'
        piezo_write: 'Dev1/AO1'
        ao_voltage_range: [0, 10]
        do_start_acquisition: '/Dev1/port0/line7'
        do_acquisition_done: '/Dev1/port0/line8'
        read_write_timeout: 10 # in seconds

    dummy_daq:
        module.Class: 'daq.dummy_daq.DummyDaq'
        ao_channels:
            - '/Dev1/AO0'
            - '/Dev1/AO1'
            - '/Dev1/AO2'
            - '/Dev1/AO3'
        ao_voltage_ranges:
            - [0, 10]
            - [0, 10]
            - [0, 10]
            - [0, 10]
        wavelengths:
            - '405 nm'
            - '488 nm'
            - '512 nm'
            - '633 nm'




logic:
#    daq_logic:
#        module.Class: 'daq_ao_logic.DAQaoLogic'
#        connect:
#           daq: 'dummy_daq'


    lasercontrol_logic:
        module.Class: 'lasercontrol_logic.LaserControlLogic'
        controllertype: 'daq'  # 'fpga'
        connect:
            controller: 'dummy_daq'


gui:
    tray:
        module.Class: 'trayicon.TrayIcon'

    man:
        module.Class: 'manager.managergui.ManagerGui'

