#  Example Qudi configuration file.
#
#
#
# IMPORTANT: The format of every 'module.Class' line has changed on 28.6.2015.
# =========  The class name now needs to be explicitly given here in the config.
#		  the config line must the form package.module.Class.ClassName
global:
    # list of modules to load when starting
    startup: ['man', 'tray']

    module_server:
        address: 'localhost'
        port: 12345

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

hardware:
 
    hamamatsu_camera:
        module.Class: 'camera.hamamatsu.hamamatsu.HCam'
    






logic:


gui:
    tray:
        module.Class: 'trayicon.TrayIcon'

    man:
        module.Class: 'manager.managergui.ManagerGui'



