#  Example Qudi configuration file.
#
#
#
# IMPORTANT: The format of every 'module.Class' line has changed on 28.6.2015.
# =========  The class name now needs to be explicitly given here in the config.
#		  the config line must the form package.module.Class.ClassName
global:
    # list of modules to load when starting
    startup: ['man', 'tray']

    module_server:
        address: 'localhost'
        port: 12345

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

hardware:

    #piezo_dummy:
    #    module.Class: 'piezo.piezo_dummy.PiezoDummy'

    pifoc:
        module.Class: 'motor.motor_pifoc.PIFOC'
        controllername: 'E816'
        serialnumber: '110059675'
        pos_min: 0  # in um
        pos_max: 80  # in um
        max_step: 1  # in um

    ms2000:
        module.Class: 'motor.motor_asi_ms2000.MS2000'
        com_port: 'COM4'
        baud_rate: '9600'
        first_axis_label: 'x'
        second_axis_label: 'y'

    thorlabs_camera:
        module.Class: 'camera.thorlabs.thorlabs_DCx.CameraThorlabs'
        default_exposure: 0.1
        default_gain: 1.0
        id_camera: 0 # if more than one camera is present

    #cameradummy:
    #    module.Class: 'camera.camera_dummy.CameraDummy'

logic:
    focus_logic:
        module.Class: 'focus_logic.FocusLogic'
        Setup : 'PALM'
        Proportional_gain : 0.1 # in %%
        Integration_gain : 1 # in %%
        init_position : 5 # in µm
        connect: 
            piezo: 'pifoc'
            stage: 'ms2000'
            autofocus : 'autofocus_logic_camera'

    autofocus_logic_camera:
        module.Class: 'autofocus_logic_camera.AutofocusLogic'
        Autofocus_ref_axis : 'X' # 'Y'
        Exposure : 0.001 # Exposure time in s
        connect:
            camera : 'thorlabs_camera'


gui:
    tray:
        module.Class: 'trayicon.TrayIcon'

    man:
        module.Class: 'manager.managergui.ManagerGui'

    focus_gui:
        module.Class: 'focus.focus_gui.FocusGUI'
        connect:
            focus_logic: 'focus_logic'


            


        
        
    



