#  Example Qudi configuration file.
#
#
#
# IMPORTANT: The format of every 'module.Class' line has changed on 28.6.2015.
# =========  The class name now needs to be explicitly given here in the config.
#		  the config line must the form package.module.Class.ClassName
global:
    # list of modules to load when starting
    startup: ['man', 'tray']

    module_server:
        address: 'localhost'
        port: 12345

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

hardware:


    piezo_dummy:
        module.Class: 'motor.motor_dummy.MotorDummy'


    camera_dummy:
        module.Class: 'camera.camera_dummy.CameraDummy'

logic:
    focus_logic:
        module.Class: 'focus_logic.FocusLogic'
        setup : 'PALM'
        init_position : 5 # in µm
        connect: 
            piezo: 'piezo_dummy'
            autofocus : 'autofocus_logic_camera'

    autofocus_logic_camera:
        module.Class: 'autofocus_logic_camera.AutofocusLogic'
        autofocus_ref_axis : 'X' # 'Y'
        proportional_gain : 0.1 # in %%
        integration_gain : 1 # in %%
        exposure : 0.001 # Exposure time in s
        connect:
            camera : 'camera_dummy'

gui:
    tray:
        module.Class: 'trayicon.TrayIcon'

    man:
        module.Class: 'manager.managergui.ManagerGui'

    focus_gui:
        module.Class: 'focus.focus_gui.FocusGUI'
        connect:
            focus_logic: 'focus_logic'


            


        
        
    



