#  Example Qudi configuration file.
#
#
#
# IMPORTANT: The format of every 'module.Class' line has changed on 28.6.2015.
# =========  The class name now needs to be explicitly given here in the config.
#		  the config line must the form package.module.Class.ClassName
global:
    # list of modules to load when starting
    startup: ['man', 'tray']

    module_server:
        address: 'localhost'
        port: 12345

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

hardware:
#    cameradummy:
#        module.Class: 'camera.camera_dummy.CameraDummy'

    andor_ultra_camera:
        module.Class: 'camera.andor.iXon897_ultra.IxonUltra'
        dll_location: 'C:\Program Files\Andor SOLIS\Drivers\atmcd64d.dll' # path to library file
        default_exposure: 0.05  # en s
        default_read_mode: 'IMAGE'
        default_temperature: -50
        default_cooler_on: True
        default_acquisition_mode: 'SINGLE_SCAN'
        default_trigger_mode: 'INTERNAL'


    #thorlabs_camera:
    #    module.Class: 'camera.thorlabs.thorlabs_DCx.CameraThorlabs'
    #    default_exposure: 0.1
    #    default_gain: 1.0
    #    id_camera: 0 # if more tha one camera is present


logic:
    camera_logic:
        module.Class: 'camera_logic2.CameraLogic'
        connect:
            hardware: 'andor_ultra_camera'


gui:
    tray:
        module.Class: 'trayicon.TrayIcon'

    man:
        module.Class: 'manager.managergui.ManagerGui'

   


