#  Example Qudi configuration file.
#
#
#
# IMPORTANT: The format of every 'module.Class' line has changed on 28.6.2015.
# =========  The class name now needs to be explicitly given here in the config.
#		  the config line must the form package.module.Class.ClassName
global:
    # list of modules to load when starting
    startup: ['man', 'tray']

    module_server:
        address: 'localhost'
        port: 12345

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

hardware: 
    mcl:
        module.Class: 'motor.motor_mcl_nanodrive.MCLNanoDrive'
        dll_location: 'C:\\Program Files\\Mad City Labs\\NanoDrive\\Madlib.dll'   # path to library file
        pos_min: 0  # in um
        pos_max: 80  # in um
        max_step: 1  # in um


logic:
    focus_logic:
        module.Class: 'focus_logic.FocusLogic'
        init_position: 10
        setup: 'ramm'
        connect:
            piezo: 'mcl'
            



gui:
    tray:
        module.Class: 'trayicon.TrayIcon'

    man:
        module.Class: 'manager.managergui.ManagerGui'

    focus_gui:
        module.Class: 'focus.focus_gui.FocusGUI'
        connect:
            focus_logic: 'focus_logic'


