#  Example Qudi configuration file.
#
#
#
# IMPORTANT: The format of every 'module.Class' line has changed on 28.6.2015.
# =========  The class name now needs to be explicitly given here in the config.
#		  the config line must the form package.module.Class.ClassName
global:
    # list of modules to load when starting
    startup: ['man', 'tray']

    module_server:
        address: 'localhost'
        port: 12345

    ## For controlling the appearance of the GUI:
    stylesheet: 'qdark.qss'

hardware:
      

        
        

logic:

    merfish_logic:
        module.Class: 'merfish_logic.MerfishLogic'
        default path: '/home/barho'
        merfish_probe_valve_number: 7
        number_of_valve_positions: 8
        number_of_probes: 100
               
gui:
    tray:
        module.Class: 'trayicon.TrayIcon'

    man:
        module.Class: 'manager.managergui.ManagerGui'
        

    merfish_gui:
        module.Class: 'merfish.merfish_gui.MerfishGUI'
        default_path: '/home/barho'
        connect:
            merfish_logic: 'merfish_logic'
            
            



            

        
        
    



